PsychoPy2experiment version="2022.1.0rc5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trials
  keyboardBackend = ioHub
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Routines
  Routine Blank
  Routine fixed_interval
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine random_interval
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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Flow
