PsychoPy2experiment version="2022.1.0rc1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trials
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Routines
  Routine Image_Rating
    ImageComponent stimulus
      image = default.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    SliderComponent attractiveness
      forceEndRoutine = True
      granularity = 0.1
      labels = "Not attractive", "Neutral", "Attractive"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Images_2AFC
    PolygonComponent fixation_2AFC
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent left_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    StaticComponent ISI_load_images
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent right_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_2AFC
      clickable = left_img, right_img
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine Fixation_Only
  Routine Feedback
  Routine Image_RatingsX3
    ImageComponent stimulus_2
      image = default.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    SliderComponent valence
      forceEndRoutine = True
      labels = "Sad", "Neutral", "Happy"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent arousal
      forceEndRoutine = True
      labels = "Not Arousing", "Neutral", "Highly Arousing"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent positivity
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Images_4AFC
    PolygonComponent fixation_4AFC
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent top_left_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    StaticComponent ISI_load_images_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent top_right_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_left_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_right_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    MouseComponent mouse_4AFC
      clickable = left_img, right_img
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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Flow
