PsychoPy2experiment version="1.65.02"
Settings
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':'004'}
  Save excel file = True
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent updateEarnings
      Begin Experiment:
        bankedEarnings=0.0
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Each Frame:
        thisBalloonEarnings=nPumps*0.05
      End Routine:
        #calculate cash 'earned'
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:   lastBalloonEarnings=thisBalloonEarnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings
    CodeComponent setBalloonSize
      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Each Frame:
        balloonSize=0.1+nPumps*0.015
      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
      End Routine:
        #save data
        trials.addData('nPumps', nPumps)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
    PatchComponent balloonBody
      texture resolution = 512
      image = redBalloon.png
      pos [set every frame] = $[-1+balloonSize/2, 0]
      startTime = 0.0
      units = norm
      sf = 1
      size [set every frame] = $balloonSize
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    TextComponent reminderMsg
      pos = [0, -0.8]
      letterHeight = 0.05
      startTime = 0.0
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      text:
        Press SPACE to pump the balloon
        Press RETURN to bank this sum
    TextComponent balloonValMsg
      text [set every frame] = $u"This balloon value:\n£%.2f" %thisBalloonEarnings
      pos = [0,0.05]
      letterHeight = 0.1
      startTime = 0.0
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    TextComponent bankedMsg
      text [set every frame] = $u"You have banked:\n£%.2f" %bankedEarnings
      pos = [0, 0.8]
      letterHeight = 0.1
      startTime = 0.0
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    CodeComponent checkKeys
      Each Frame:
        if event.getKeys(['space']):
          nPumps=nPumps+1
          if nPumps>maxPumps:
            popped=True
            continueRoutine=False
    KeyboardComponent bankButton
      forceEndTrial = True
      startTime = 0.0
      allowedKeys = ["return"]
      storeResponseTime = True
      store = nothing
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  Routine finalScore
    TextComponent finalScore_2
      text [set every repeat] = $u"Well done! You banked a total of\n£%2.f" %bankedEarnings
      letterHeight = 0.1
      startTime = 0.0
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    KeyboardComponent doneKey
      forceEndTrial = True
      startTime = 0.0
      storeResponseTime = False
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  Routine feedback
    CodeComponent checkPopped
      Begin Experiment:
        feedbackText=""
        from psychopy import sound
        bang = sound.Sound("bang.wav")
      Begin Routine:
        if popped==True:
          feedbackText="Oops! Lost that one!"
          bang.play()
        else:
          feedbackText=u"You banked £%.2f" %lastBalloonEarnings
    TextComponent feedbackMsg
      text [set every repeat] = $feedbackText
      duration = 1.5
      letterHeight = 0.1
      startTime = 0.0
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  Routine instructions
    TextComponent instrMessage
      letterHeight = 0.05
      startTime = 0.0
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      text:
        This is a game where you have to optimise your earnings in a balloon pumping competition.

        You get prize money for each balloon you pump up, according to its size. But if you pump it too far it will pop and you'll get nothing for that balloon.

        Balloons differ in their maximum size - they can occasionally reach to almost the size of the screen but most will pop well before that.

        Press;
            SPACE to pump the balloon
            RETURN to bank the cash for this balloon and move onto the next
    KeyboardComponent resp
      forceEndTrial = True
      startTime = 0.0
      storeResponseTime = False
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
    trialList = [{u'imageFile': u'blueBalloon.png', u'maxPumps': 2}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 8}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 14}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 20}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 26}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 32}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 38}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 44}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 50}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 56}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 62}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 68}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 74}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 80}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 86}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 92}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 98}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 104}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 110}, {u'imageFile': u'blueBalloon.png', u'maxPumps': 116}]
    trialListFile = trialTypes.xlsx
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    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine finalScore
