PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1080, 720]
  color = $[0.89,0.89,0.89]
  expName = Form
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Routines
  Routine demog
    FormComponent demographics
      Data Format = rows
      Item Padding = 0.06
      Items = demographics.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.8)
      Style = ['light']
      Text Height = 0.025
      borderColor = $[1,1,1]
      borderColorSpace = rgb
      fillColor = $[1,1,1]
      size = (1, 0.7)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent demogText
      color = black
      letterHeight = 0.025
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Please answer the following questions:
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.45))
      Each Frame:
        continueButton.draw()

        if demographics.formComplete():
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
  Routine main
    FormComponent BigFive
      Data Format = rows
      Item Padding = 0.05
      Items = BigFiveItems.csv
      Pos = (0, 0.05)
      Randomize = False
      Size = (1.5, 0.75)
      Style = ('light',)
      Text Height = 0.025
      borderColor = $[1,1,1]
      borderColorSpace = rgb
      fillColor = $[1,1,1]
      size = (1, 0.7)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent formCode
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.45))
      Each Frame:
        continueButton.draw()
    TextboxComponent formInstructs
      anchor = top-center
      bold = False
      borderColorSpace = rgb
      color = black
      editable = False
      letterHeight = 0.025
      padding = None
      pos = (0, 0.5)
      size = (1.5, 0.15)
      startVal [time (s)] = 0.0
      text = Here are a number of characteristics that may or may not apply to you. For example, do you agree that you are someone who likes to spend time with others? Please select the appropriate rating next to each statement to indicate the extent to which you agree or disagree with that statement.
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Flow
  Routine demog
  Routine main
