PsychoPy2experiment version="1.65.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'ID01', 'session':001}
  Save excel file = True
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine A
    TextComponent msgA
      color [set every repeat] = $letterColor
      text = You chose A (the blue pill?)
      duration = 1.0
      letterHeight = 0.1
      startTime = 0.0
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  Routine B
    TextComponent msgB
      color [set every repeat] = $letterColor
      text = You chose B (the red pill?)
      duration = 1.0
      letterHeight = 0.1
      startTime = 0.0
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  Routine instr
    TextComponent instrText
      letterHeight = 0.1
      startTime = 0.0
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      text:
        If you press 'a' you'll get 3 trials of Routine A

        If you press 'b' you'll get 3 trials of Routine B
    KeyboardComponent resp
      forceEndTrial = True
      startTime = 0.0
      allowedKeys = ['a', 'b']
      storeResponseTime = False
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    CodeComponent chooseBranch
      End Routine:
        if resp.keys=='a':
            repsB.finished=True
        else:
            repsA.finished=True
Flow
  Routine instr
  LoopInitiator repsA loopType="TrialHandler"
    loopType = random
    nReps = 1
    trialList = [{u'letterColor': u'red'}, {u'letterColor': u'green'}, {u'letterColor': u'blue'}]
    trialListFile = trialTypes.xlsx
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    Routine A
  LoopTerminator repsA
  LoopInitiator repsB loopType="TrialHandler"
    loopType = random
    nReps = 1
    trialList = [{u'letterColor': u'red'}, {u'letterColor': u'green'}, {u'letterColor': u'blue'}]
    trialListFile = trialTypes.xlsx
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    Routine B
  LoopTerminator repsB
