PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = blockedTrials
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5,0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      units = height
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  Routine readyMessage
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $readyMsg
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = chooseBlock.csv
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [{'readyMsg': u'This is a block of faces', 'condsFile': u'facesBlock.csv'},
      {'readyMsg': u'This is a block of houses', 'condsFile': u'housesBlock.csv'}]
    Routine readyMessage
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
