<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="1.83.04">
  <Settings>
    <Param name="Show mouse" updates="None" val="False" valType="bool"/>
    <Param name="Data filename" updates="None" val="u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])" valType="code"/>
    <Param name="Monitor" updates="None" val="testMonitor" valType="str"/>
    <Param name="Enable Escape" updates="None" val="True" valType="bool"/>
    <Param name="color" updates="None" val="$[0,0,0]" valType="str"/>
    <Param name="Window size (pixels)" updates="None" val="[800, 600]" valType="code"/>
    <Param name="Full-screen window" updates="None" val="False" valType="bool"/>
    <Param name="colorSpace" updates="None" val="rgb" valType="str"/>
    <Param name="Experiment info" updates="None" val="{u'session': u'001', u'participant': u''}" valType="code"/>
    <Param name="Save csv file" updates="None" val="False" valType="bool"/>
    <Param name="Show info dlg" updates="None" val="False" valType="bool"/>
    <Param name="Save wide csv file" updates="None" val="True" valType="bool"/>
    <Param name="Save psydat file" updates="None" val="True" valType="bool"/>
    <Param name="expName" updates="None" val="keyNameFinder" valType="str"/>
    <Param name="logging level" updates="None" val="exp" valType="code"/>
    <Param name="blendMode" updates="None" val="avg" valType="str"/>
    <Param name="Save excel file" updates="None" val="False" valType="bool"/>
    <Param name="Units" updates="None" val="use prefs" valType="str"/>
    <Param name="Save log file" updates="None" val="True" valType="bool"/>
    <Param name="Screen" updates="None" val="1" valType="num"/>
  </Settings>
  <Routines>
    <Routine name="keyNameFinderRoutine">
      <TextComponent name="keyNameText">
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="colorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="name" updates="None" val="keyNameText" valType="code"/>
        <Param name="wrapWidth" updates="constant" val="" valType="code"/>
        <Param name="color" updates="constant" val="white" valType="str"/>
        <Param name="text" updates="constant" val="Press any key" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="pos" updates="constant" val="[0, 0]" valType="code"/>
        <Param name="flip" updates="constant" val="" valType="str"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="font" updates="constant" val="Arial" valType="str"/>
        <Param name="letterHeight" updates="constant" val="0.1" valType="code"/>
      </TextComponent>
      <CodeComponent name="code">
        <Param name="Begin Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="name" updates="None" val="code" valType="code"/>
        <Param name="Begin Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Each Frame" updates="constant" val="keys = event.getKeys()&amp;#10;if keys:&amp;#10;&amp;#10;    if 'escape' in keys:&amp;#10;        continueRoutine = False&amp;#10;&amp;#10;    lastKey = keys.pop()&amp;#10;&amp;#10;    messFormat = &quot;That key was:\n\n\'{0}\'\n\nPress another key&quot;.format(lastKey)&amp;#10;&amp;#10;    keyNameText.text = messFormat&amp;#10;&amp;#10;" valType="extendedCode"/>
      </CodeComponent>
    </Routine>
    <Routine name="trial">
      <StaticComponent name="ISI">
        <Param name="code" updates="None" val="" valType="code"/>
        <Param name="name" updates="None" val="ISI" valType="code"/>
        <Param name="stopVal" updates="constant" val="0.5" valType="code"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
      </StaticComponent>
      <TextComponent name="description">
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="colorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="name" updates="None" val="description" valType="code"/>
        <Param name="wrapWidth" updates="constant" val="" valType="code"/>
        <Param name="color" updates="constant" val="white" valType="str"/>
        <Param name="text" updates="constant" val="This tool helps you find the names of your allowed/correct keys for your experiment.&amp;#10;&amp;#10;(Press space to move on, escape to quit)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="pos" updates="constant" val="[0, 0]" valType="code"/>
        <Param name="flip" updates="constant" val="" valType="str"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="font" updates="constant" val="Arial" valType="str"/>
        <Param name="letterHeight" updates="constant" val="0.1" valType="code"/>
      </TextComponent>
      <KeyboardComponent name="descriptionKeyboard">
        <Param name="correctAns" updates="constant" val="" valType="str"/>
        <Param name="storeCorrect" updates="constant" val="False" valType="bool"/>
        <Param name="name" updates="None" val="descriptionKeyboard" valType="code"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="forceEndRoutine" updates="constant" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="discard previous" updates="constant" val="True" valType="bool"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="allowedKeys" updates="constant" val="'space'" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="store" updates="constant" val="last key" valType="str"/>
        <Param name="syncScreenRefresh" updates="constant" val="True" valType="bool"/>
      </KeyboardComponent>
    </Routine>
  </Routines>
  <Flow>
    <Routine name="trial"/>
    <Routine name="keyNameFinderRoutine"/>
  </Flow>
</PsychoPy2experiment>
