PsychoPy2experiment version="1.74.00"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':'03'}
  Save excel file = True
  expName = NavonTask
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent fixate
      color = $[1, 1, 1]
      text = +
      stopVal [duration (s)] = 1.0
      units = cm
      startVal [time (s)] = 1.0
      letterHeight = 2
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    ImageComponent stimulus
      stopVal [duration (s)] = 0.2
      mask = none
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = 2.0
      image [set every repeat] = $stimFile
      size = [200,200]
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    ImageComponent mask
      stopVal [duration (s)] = 5.0
      mask = none
      pos [set every repeat] = $[xPos, yPos]
      units = pix
      startVal [time (s)] = 2.2
      image = mask.png
      size = [200,200]
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 7.0
      forceEndRoutine = True
      allowedKeys = 's', 'h'
      startVal [time (s)] = 2.0
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  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thanks
    TextComponent thanksMsg
      text = You're done! Fun, wasn't it!? ;-)
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        In this experiment you will be presented with a large letter made up of smaller letters. Your task is to

        Respond by pressing;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        There will be a number of practice trials in which you will be given feedback.

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instrPractice
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
    conditions:
      [{'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'corrAns': 'h', 'stimFile': 'bigHsmallH.png', 'location': 'up_right'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'corrAns': 's', 'stimFile': 'bigHsmallS.png', 'location': 'up_right'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'corrAns': 's', 'stimFile': 'bigSsmallS.png', 'location': 'up_right'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'corrAns': 'h', 'stimFile': 'bigSsmallH.png', 'location': 'up_right'},
      {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'corrAns': 'h', 'stimFile': 'bigHsmallH.png', 'location': 'up_left'},
      {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'corrAns': 's', 'stimFile': 'bigHsmallS.png', 'location': 'up_left'},
      {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'corrAns': 's', 'stimFile': 'bigSsmallS.png', 'location': 'up_left'},
      {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'corrAns': 'h', 'stimFile': 'bigSsmallH.png', 'location': 'up_left'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'corrAns': 'h', 'stimFile': 'bigHsmallH.png', 'location': 'down_right'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': -200.0, 'corrAns': 's', 'stimFile': 'bigHsmallS.png', 'location': 'down_right'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'corrAns': 's', 'stimFile': 'bigSsmallS.png', 'location': 'down_right'}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
    Routine trial
    Routine feedback
  LoopTerminator practiceTrials
  Routine instrMain
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'corrAns': 'h', 'stimFile': 'bigHsmallH.png', 'location': 'up_right'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'corrAns': 's', 'stimFile': 'bigHsmallS.png', 'location': 'up_right'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'corrAns': 's', 'stimFile': 'bigSsmallS.png', 'location': 'up_right'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': 200.0, 'corrAns': 'h', 'stimFile': 'bigSsmallH.png', 'location': 'up_right'},
      {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'corrAns': 'h', 'stimFile': 'bigHsmallH.png', 'location': 'up_left'},
      {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'corrAns': 's', 'stimFile': 'bigHsmallS.png', 'location': 'up_left'},
      {'xPos': -200.0, 'congruence': 'conflicting', 'yPos': 200.0, 'corrAns': 's', 'stimFile': 'bigSsmallS.png', 'location': 'up_left'},
      {'xPos': -200.0, 'congruence': 'consistent', 'yPos': 200.0, 'corrAns': 'h', 'stimFile': 'bigSsmallH.png', 'location': 'up_left'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'corrAns': 'h', 'stimFile': 'bigHsmallH.png', 'location': 'down_right'},
      {'xPos': 200.0, 'congruence': 'consistent', 'yPos': -200.0, 'corrAns': 's', 'stimFile': 'bigHsmallS.png', 'location': 'down_right'},
      {'xPos': 200.0, 'congruence': 'conflicting', 'yPos': -200.0, 'corrAns': 's', 'stimFile': 'bigSsmallS.png', 'location': 'down_right'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
