PsychoPy2experiment version="1.65.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'s_001', 'ori':10}
  Save excel file = True
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PatchComponent fixation
      color = [1, 1, 1]
      image = none
      mask = none
      duration = 1.0
      startTime = 0.0
      units = pix
      sf = 1
      size = [3, 3]
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    PatchComponent gabor
      color [set every repeat] = $[level, level, level]
      image = sin
      mask = gauss
      duration = 0.5
      phase [set every frame] = $trialClock.getTime()*2
      startTime = 0.5
      ori = $expInfo['ori']
      units = pix
      sf = 0.1
      size = [128,128]
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    KeyboardComponent resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = up
      startTime = 0.5
      allowedKeys = $["up","down"]
      duration = 2.0
      storeResponseTime = False
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  Routine instr
    TextComponent instructions
      color = [1, 1, 1]
      letterHeight = 0.1
      startTime = 0
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      text:
        This exp measures your detection threshold using a staircase procedure.

        Press 'up' if you see the stimulus, 'down' if you didn't.

        Any key to start
    KeyboardComponent ready
      forceEndTrial = True
      correctAns = thisTrial.corrAns
      startTime = 0
      storeResponseTime = False
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Flow
  Routine instr
  LoopInitiator trials loopType="StairHandler"
    min value = 0
    N reversals = 0
    loopType = staircase
    nReps = 30
    start value = 0.5
    N up = 1
    max value = 1
    N down = 3
    step type = log
    step sizes = [0.8,0.8,0.4,0.4,0.2]
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    Routine trial
  LoopTerminator trials
